PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = u'../data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = cont_rel_prediction
  keyboardBackend = ioHub
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Routines
  Routine video_phase
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    MovieComponent video
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $stimuli
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextboxComponent video_resp
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder [set every repeat] = Type here...
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_video_resp
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0.4, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text [set every repeat] = Submit
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      callback:
        video_resp.text_full.append(video_resp.text)
        video_resp.text = ''
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        video_resp.text_full = []
      End Routine:
        trials.addData('video_resp.text_full',video_resp.text_full)
  Routine resp_phase
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    TextComponent resp_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = What relationship did the characters share?
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    TextboxComponent post_video_resp
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    ButtonComponent button_post_video
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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  Routine fixation
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    TextComponent fixation_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine end_task
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for completing the task. Press the space bar to end the task.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_main
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    TextComponent intro_main_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello. You will be completing a task that will ask you to watch video clips and to respond with the relationship you believe the characters in the clip share.

        Press the space bar to continue.
    KeyboardComponent intro_main_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_resp
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    TextComponent intro_resp_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        After each clip, you will be asked to make one final guess and hit submit. Even if your answer has not changed, please type your response and hit submit.

        Press the space bar to start the task.
    KeyboardComponent intro_resp_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_video
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    TextComponent intro_video_prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        While watching a video clip, you can make a response at any time and then submit that response. You can do this throughout the entire clip. Please submit a response when you first have a guess as to what the relationship is, and again, as much as necessary, when you wish to change your answer.

        Press the space bar to continue.
    KeyboardComponent intro_video_cont
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro_main
  Routine intro_video
  Routine intro_resp
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../stimuli/stimuli_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimuli', '../stimuli/ryan_marissa_s01e01_1.mp4'), ('characters', 'ryan_marissa')]),
      OrderedDict([('stimuli', '../stimuli/ryan_sandy_s01e01_1.mp4'), ('characters', 'ryan_sandy')]),
      OrderedDict([('stimuli', '../stimuli/ryan_sandy_s01e01_2.mp4'), ('characters', 'ryan_sandy')]),
      OrderedDict([('stimuli', '../stimuli/ryan_sandy_s01e01_3.mp4'), ('characters', 'ryan_sandy')]),
      OrderedDict([('stimuli', '../stimuli/seth_ryan_s01e01_1.mp4'), ('characters', 'seth_ryan')]),
      OrderedDict([('stimuli', '../stimuli/seth_ryan_s01e01_2.mp4'), ('characters', 'seth_ryan')])]
    Routine video_phase
    Routine resp_phase
    Routine fixation
  LoopTerminator trials
  Routine end_task
